CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot containregexp "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "_seg")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_seg
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "_seg")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:TXR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_seg") (directory does contain "stardist")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "_seg") (directory does contain "cellpose")
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    Name to assign these objects:Cells
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RelateObjects:[module_num:5|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
    Parent objects:Nuclei
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cells_with_nucleus
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
IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:Cells_with_nucleus
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images\plate1\outlines\nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:TXR
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images\plate1\outlines\cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:GFP
    Select objects to measure:Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cells_with_nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells_with_nucleus,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells_with_nucleus
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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